PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Staircase_Test
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Trial
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    CodeComponent Ans_code
      Code Type = Py
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      Begin Routine:
        #double check this later
        if map(lambda x: x>25, Change_Triangle.size):
            CorrectAns= 'left'
        else:
            CorrectAns= 'right'
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = (25,25)
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Stable_Triangle
      draggable = True
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = [-20,0]
      saveStartStop = False
      shape = triangle
      size = [25,25]
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent Change_Triangle
      fillColor = white
      pos = [20,0]
      saveStartStop = False
      shape = triangle
      size [set every repeat] = level
      startVal [time (s)] = 0.0
      units = pix
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  Routine Welcome
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    TextComponent Welcome_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Left, red triangle is stable, Right, white triangle is comparison.
        Left arrow key= make smaller
        Right arrow key= make bigger

        Press "Space" to move on.
    KeyboardComponent Welcome_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator trials loopType="MultiStairHandler"
    conditionsFile = Staircasing Test.xlsx
    loopType = interleaved staircases
    nReps = 10
    stairType = simple
    switchMethod = random
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    conditions:
      [{'label': 'big_start', 'nReps': 10, 'startVal': [50, 50], 'maxVal': 50, 'minVal': 1, 'stepSizes': [20, 10, 5, 2, 1], 'stepType': 'lin', 'nUp': 1, 'nDown': 1, 'nReversals': 5},
      {'label': 'small_start', 'nReps': 10, 'startVal': [1, 1], 'maxVal': 50, 'minVal': 1, 'stepSizes': [20, 10, 5, 2, 1], 'stepType': 'lin', 'nUp': 1, 'nDown': 1, 'nReversals': 5}]
    Routine Trial
  LoopTerminator trials
